# blood_smear backend configuration
#py pyDevice,SimServer,virtual_microscope.devices.sim_server,SimServer
#py Property,SimServer,Backend,blood_smear
#py pyDevice,Camera,virtual_microscope.devices.camera,SimCameraDevice
#py pyDevice,XYStage,virtual_microscope.devices.stage,SimStageDevice
#py pyDevice,ZStage,virtual_microscope.devices.z_stage,SimZStageDevice
#py pyDevice,LED,virtual_microscope.devices.state,LEDDevice
#py pyDevice,Filter Wheel,virtual_microscope.devices.state,FilterWheelDevice
#py pyDevice,Shutter,virtual_microscope.devices.shutter,SimShutterDevice
#py pyDevice,Objective,virtual_microscope.devices.state,ObjectiveDevice

#py Property,Core,Camera,Camera
#py Property,Core,XYStage,XYStage
#py Property,Core,Focus,ZStage
#py Property,Core,Shutter,Shutter

#py Property,Core,Initialize,1
#py ConfigGroup,Channel,wright-giemsa,LED,Label,CYAN
#py ConfigGroup,Channel,wright-giemsa,Filter Wheel,Label,Electra1(402/454)
#py ConfigGroup,Channel,nuclei-aid,LED,Label,ORANGE
#py ConfigGroup,Channel,nuclei-aid,Filter Wheel,Label,mScarlet3(569/582)
#py ConfigGroup,Channel,membrane-aid,LED,Label,RED
#py ConfigGroup,Channel,membrane-aid,Filter Wheel,Label,miRFP670(642/670)
