#py pyDevice,SimServer,virtual_microscope.devices.sim_server,SimServer
#py Property,SimServer,Backend,colony_counter
#py pyDevice,Camera,virtual_microscope.devices.camera,SimCameraDevice
#py pyDevice,Channel,virtual_microscope.devices.state,ColonyCounterChannelDevice
#py pyDevice,Shutter,virtual_microscope.devices.shutter,SimShutterDevice
#py Property,Core,Camera,Camera
#py Property,Core,Shutter,Shutter

#py Property,Core,Initialize,1
#py ConfigGroup,Channel,plate-image,Channel,Label,transmitted
#py ConfigGroup,Channel,blue-channel,Channel,Label,blue-filter
#py ConfigGroup,Channel,gfp-channel,Channel,Label,GFP-excitation
