# fibroblast backend configuration
#py pyDevice,SimServer,virtual_microscope.devices.sim_server,SimServer
#py Property,SimServer,Backend,fibroblast
#py pyDevice,Camera,virtual_microscope.devices.camera,SimCameraDevice
#py pyDevice,XYStage,virtual_microscope.devices.stage,SimStageDevice
#py pyDevice,ZStage,virtual_microscope.devices.z_stage,SimZStageDevice
#py pyDevice,LED,virtual_microscope.devices.state,LEDDevice
#py pyDevice,Filter Wheel,virtual_microscope.devices.state,FilterWheelDevice
#py pyDevice,Shutter,virtual_microscope.devices.shutter,SimShutterDevice
#py pyDevice,Objective,virtual_microscope.devices.state,ObjectiveDevice
#py pyDevice,Temperature,virtual_microscope.devices.state,TemperatureControllerDevice
#py pyDevice,Perfusion,virtual_microscope.devices.state,PerfusionPumpDevice
#py pyDevice,Stretch,virtual_microscope.devices.state,StretchDevice

#py Property,Core,Camera,Camera
#py Property,Core,XYStage,XYStage
#py Property,Core,Focus,ZStage
#py Property,Core,Shutter,Shutter

#py Property,Core,Initialize,1
#py ConfigGroup,Fake,brightfield,LED,Label,CYAN
#py ConfigGroup,Fake,brightfield,Filter Wheel,Label,Electra1(402/454)
#py ConfigGroup,Fake,DAPI,LED,Label,UV
#py ConfigGroup,Fake,DAPI,Filter Wheel,Label,SCFP2(434/474)
#py ConfigGroup,Fake,phalloidin,LED,Label,GREEN
#py ConfigGroup,Fake,phalloidin,Filter Wheel,Label,TagGFP2(483/506)
