# histology backend configuration
#py pyDevice,SimServer,virtual_microscope.devices.sim_server,SimServer
#py Property,SimServer,Backend,histology
#py pyDevice,Camera,virtual_microscope.devices.camera,SimCameraDevice
#py pyDevice,XYStage,virtual_microscope.devices.stage,SimStageDevice
#py pyDevice,ZStage,virtual_microscope.devices.z_stage,SimZStageDevice
#py pyDevice,LED,virtual_microscope.devices.state,LEDDevice
#py pyDevice,Filter Wheel,virtual_microscope.devices.state,FilterWheelDevice
#py pyDevice,Shutter,virtual_microscope.devices.shutter,SimShutterDevice
#py pyDevice,Objective,virtual_microscope.devices.state,ObjectiveDevice

#py Property,Core,Camera,Camera
#py Property,Core,XYStage,XYStage
#py Property,Core,Focus,ZStage
#py Property,Core,Shutter,Shutter

#py Property,Core,Initialize,1
#py ConfigGroup,Fake,H-and-E,LED,Label,CYAN
#py ConfigGroup,Fake,H-and-E,Filter Wheel,Label,Electra1(402/454)
#py ConfigGroup,Fake,hematoxylin,LED,Label,UV
#py ConfigGroup,Fake,hematoxylin,Filter Wheel,Label,SCFP2(434/474)
#py ConfigGroup,Fake,eosin,LED,Label,GREEN
#py ConfigGroup,Fake,eosin,Filter Wheel,Label,obeYFP(514/528)
