# spt backend configuration
#py pyDevice,SimServer,virtual_microscope.devices.sim_server,SimServer
#py Property,SimServer,Backend,spt
#py pyDevice,Camera,virtual_microscope.devices.camera,SimCameraDevice
#py pyDevice,LED,virtual_microscope.devices.state,LEDDevice
#py pyDevice,Filter Wheel,virtual_microscope.devices.state,FilterWheelDevice
#py pyDevice,Shutter,virtual_microscope.devices.shutter,SimShutterDevice
#py pyDevice,Objective,virtual_microscope.devices.state,ObjectiveDevice

#py Property,Core,Camera,Camera
#py Property,Core,Shutter,Shutter

#py Property,Core,Initialize,1
#py ConfigGroup,Fake,widefield,LED,Label,CYAN
#py ConfigGroup,Fake,widefield,Filter Wheel,Label,Electra1(402/454)
#py ConfigGroup,Fake,TIRF,LED,Label,GREEN
#py ConfigGroup,Fake,TIRF,Filter Wheel,Label,TagGFP2(483/506)
