# zebrafish backend configuration
#py pyDevice,SimServer,virtual_microscope.devices.sim_server,SimServer
#py Property,SimServer,Backend,zebrafish
#py pyDevice,Camera,virtual_microscope.devices.camera,SimCameraDevice
#py pyDevice,XYStage,virtual_microscope.devices.stage,SimStageDevice
#py pyDevice,ZStage,virtual_microscope.devices.z_stage,SimZStageDevice
#py pyDevice,LED,virtual_microscope.devices.state,LEDDevice
#py pyDevice,Filter Wheel,virtual_microscope.devices.state,FilterWheelDevice
#py pyDevice,Shutter,virtual_microscope.devices.shutter,SimShutterDevice
#py pyDevice,Objective,virtual_microscope.devices.state,ObjectiveDevice
#py pyDevice,Temperature,virtual_microscope.devices.state,TemperatureControllerDevice
#py pyDevice,Anesthesia,virtual_microscope.devices.state,AnesthesiaDevice

#py Property,Core,Camera,Camera
#py Property,Core,XYStage,XYStage
#py Property,Core,Focus,ZStage
#py Property,Core,Shutter,Shutter

#py Property,Core,Initialize,1
#py ConfigGroup,Channel,brightfield,LED,Label,CYAN
#py ConfigGroup,Channel,brightfield,Filter Wheel,Label,Electra1(402/454)
#py ConfigGroup,Channel,flk1-GFP,LED,Label,GREEN
#py ConfigGroup,Channel,flk1-GFP,Filter Wheel,Label,TagGFP2(483/506)
#py ConfigGroup,Channel,myl7-mCherry,LED,Label,ORANGE
#py ConfigGroup,Channel,myl7-mCherry,Filter Wheel,Label,mScarlet3(569/582)
